Journal

Version VersionNumber=2.4
Disabled Acquire - Save Setting
  stFilename = "C:\Program Files\MM\ACQSTATE\RGBCam_PreviousState.AST"
Component.Zeiss_3x_Baseport_Slider.PositionLabel = "100% Binocular"
Component.Zeiss_3x_Sideport_Turret.PositionLabel = "100% L"
Device.Illumination.Setting = "[Current Shutter]"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Red"
IfThenElse Expression=VariableExists(Exposure_Red)
  CodeBlock Condition=false
    Exposure_Red = 30
Camera.Digital.Exposure = Exposure_Red
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Red = ShowRegionStatistics.Average
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Green"
IfThenElse Expression=VariableExists(Exposure_Green)
  CodeBlock Condition=false
    Exposure_Green = 30
Camera.Digital.Exposure = Exposure_Green
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Green = ShowRegionStatistics.Average
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Blue"
IfThenElse Expression=VariableExists(Exposure_Blue)
  CodeBlock Condition=false
    Exposure_Blue = 30
Camera.Digital.Exposure = Exposure_Blue
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Blue = ShowRegionStatistics.Average
Color Combine
  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
  imGreen = m 1 2 9 2 1 -1 -1 8 Untitled
  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
  imStack = "RGB"
  imDest = "RGBCam"
  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
  bColorEncode = FALSE
  nSource = 2
  nResultDepth = 2
  bHueRendering = FALSE
Close
  im = "RGB"
  bSaveIt = FALSE
Disabled Acquire - Load Setting
  stFileName = "C:\Program Files\MM\ACQSTATE\RGBCam_PreviousState.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = TRUE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = TRUE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "TRANS Camera"
