Journal
Description: Calbiration of RGB Image
Version VersionNumber=2.4
Delete Variable
  stVariable = ""
  bDeleteAll = TRUE
Illumination - Restore Settings
  stFileName = "C:\Program Files\MM\app\mmproc\DATA\Seb_2020-06-29.ILS"
Acquire - Load Setting
  stFileName = "C:\Program Files\MM\ACQSTATE\RGBCam_InitState.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = TRUE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = TRUE
Exposure_Green = Camera.Digital.Exposure
Use Active Region
Component.Zeiss_3x_Baseport_Slider.PositionLabel = "100% Binocular"
Component.Zeiss_3x_Sideport_Turret.PositionLabel = "100% L"
Device.Illumination.Setting = "[Current Shutter]"
Comment: Set the Exposure if not done yet. Propose Auto Expose
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Green"
Disabled Acquire
  imDest = "RGB"
Acquire - Start Live
PromptUser VariableName=AutoExpose, PromptType=YesNo, TitleText=Auto-Exposure ?, Constrain=1, PromptText=Auto-Exposure ?, DialogXPos=0, DialogYPos=0, Min=1.87275e-317, Max=1.87275e-317
IfThenElse Expression=AutoExpose="Y"
  CodeBlock Condition=true
    PromptUser VariableName=SetExposure, PromptType=YesNo, TitleText=Set Exposure, Constrain=1, PromptText=Move to empty area and if saturated, reduce light, DialogXPos=0, DialogYPos=0, Min=1.87275e-317, Max=1.87275e-317
    Acquire - Stop Live
    Acquire - Auto Expose
      imDest = "autoexpose"
    Close
      im = m 1 7 9 0 1 9 0 8 Untitled
      bSaveIt = FALSE
  CodeBlock Condition=false
    Acquire - Stop Live
Comment: ============= 
  Acquire 1st serie to estimate the ratio of intensities
  =============
Exposure_Red = Exposure_Green/1.5
Exposure_Blue = Exposure_Green*1.4
Comment: Raw Tune RED
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Red"
Camera.Digital.Exposure = Exposure_Red
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Red = ShowRegionStatistics.Average
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Raw Tune GREEN
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Green"
Camera.Digital.Exposure = Exposure_Green
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Green = ShowRegionStatistics.Average
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Raw Tune BLUE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RGBCam-Trans Blue"
Camera.Digital.Exposure = Exposure_Blue
Acquire
  imDest = "RGB"
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Intensity_Blue = ShowRegionStatistics.Average
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Exposure_Blue = floor(Exposure_Blue/Intensity_Blue*Intensity_Green)
Exposure_Red = floor(Exposure_Red/Intensity_Red*Intensity_Green)
RunJournal JournalName=C:\Program Files\MM\app\mmproc\journals\Seb\RGBCam-Acquire.JNL
PromptUser VariableName=TuneExp, PromptType=YesNo, TitleText=Tune Exposure Time ?, Constrain=1, PromptText=Tune Exposure Time ?, DialogXPos=0, DialogYPos=0, Min=1.87275e-317, Max=1.87275e-317
IfThenElse Expression=TuneExp="Y"
  CodeBlock Condition=true
    Close
      im = m 1 3 9 0 1 -1 -1 8 Untitled
      bSaveIt = FALSE
    RunJournal JournalName=C:\Program Files\MM\app\mmproc\journals\Seb\RGBCam-Calibrate Tune.JNL
Trace Expression="Red="+STR(Exposure_Red)+"ms , "+"Green="+STR(Exposure_Green)+"ms , " +"Blue="+STR(Exposure_Blue)+"ms "
