<Journal>
<Description>Tune the Exposure</Description>
<Version VersionNumber="2.4"/>
<CodeBlock>
<CommentEntry>STEP 1 : RED Channel</CommentEntry>
<AssignVariableEntry VariableName="TuneTop" Expression="0"/>
<AssignVariableEntry VariableName="TuneDown" Expression="0"/>
<FunctionEntry GUID="{0x3cef1e1a-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Select Illumination" Interactive="0" ApplicationName="mmproc" VersionNumber="1" CommandID="1" MissingImage="0" MetaJournal="0000000009FB6358" IsCurrentVersion="1" Variables="0000000009FB6098">
<Variable Type="Logical" Name="jnlSelectIllum.bUseLegacyDelay" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable>
<Variable Type="Integer" Name="jnlSelectIllum.cMillisecDelay" NDimensions="0" Override="" OverrideVariable="">100</Variable>
<Variable Type="String" Name="jnlSelectIllum.stSetting" NDimensions="0" Override="" OverrideVariable="">16 RGBCam-Trans Red</Variable>
</FunctionEntry>
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Red"/>
<WhileLoopEntry Expression="(TuneDown=0) or (TuneTop=0)">
<CodeBlock>
<AssignVariableEntry VariableName="Camera.Digital.Exposure" Expression="Exposure_Tmp"/>
<FunctionEntry GUID="{0x281ef4a0-0x2b37-0x11d4-0x98-0x53-0x0-0xe0-0x18-0x90-0x87-0x5b}" FunctionName="Acquire" Interactive="0" ApplicationName="acquire" VersionNumber="20000127" CommandID="2" MissingImage="0" MetaJournal="000000000CD73F40" IsCurrentVersion="1" Variables="000000000CD73C68">
<Variable Type="Image" Name="jnlAcquire.imDest" NDimensions="0" Override="" OverrideVariable="">m	0 6 9 15 1 -1 -1 4 Tune </Variable>
</FunctionEntry>
<FunctionEntry GUID="{0x3cef1e51-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Show Region Statistics" Interactive="0" ApplicationName="mmproc" VersionNumber="20060816" CommandID="3" MissingImage="0" MetaJournal="000000000A02D150" IsCurrentVersion="1" Variables="000000000A02CE78">
<Variable Type="Image" Name="jnlLogRegion.im" NDimensions="0" Override="" OverrideVariable="">m	1 3 9 0 1 -1 -1 8 Untitled </Variable>
<Variable Type="Logical" Name="jnlLogRegion.bUseThreshold" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable>
<Variable Type="Logical" Name="jnlLogRegion.bEntireImage" NDimensions="0" Override="" OverrideVariable="">TRUE</Variable>
<Variable Type="Integer" Name="jnlLogRegion.channel" NDimensions="0" Override="" OverrideVariable="">2</Variable>
</FunctionEntry>
<AssignVariableEntry VariableName="Intensity_Tmp" Expression="ShowRegionStatistics.Average"/>
<IfThenElseEntry Expression="Intensity_Tmp&gt;Intensity_Green">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Next" Expression="floor(Exposure_Tmp/1.1)"/>
<IfThenElseEntry Expression="Exposure_Next=Exposure_Tmp">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Tmp-1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Next"/>
</CodeBlock>
</IfThenElseEntry>
<AssignVariableEntry VariableName="TuneTop" Expression="1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="TuneDown" Expression="1"/>
<AssignVariableEntry VariableName="Exposure_Next" Expression="floor(Exposure_Tmp*1.1)"/>
<IfThenElseEntry Expression="Exposure_Next=Exposure_Tmp">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Tmp+1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Next"/>
</CodeBlock>
</IfThenElseEntry>
</CodeBlock>
</IfThenElseEntry>
</CodeBlock>
</WhileLoopEntry>
<AssignVariableEntry VariableName="Exposure_Red" Expression="Exposure_Tmp"/>
<CommentEntry>STEP 2 : BLUE Channel</CommentEntry>
<AssignVariableEntry VariableName="TuneTop" Expression="0"/>
<AssignVariableEntry VariableName="TuneDown" Expression="0"/>
<FunctionEntry GUID="{0x3cef1e1a-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Select Illumination" Interactive="0" ApplicationName="mmproc" VersionNumber="1" CommandID="4" MissingImage="0" MetaJournal="0000000009FB6358" IsCurrentVersion="1" Variables="0000000009FB6098">
<Variable Type="Logical" Name="jnlSelectIllum.bUseLegacyDelay" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable>
<Variable Type="Integer" Name="jnlSelectIllum.cMillisecDelay" NDimensions="0" Override="" OverrideVariable="">100</Variable>
<Variable Type="String" Name="jnlSelectIllum.stSetting" NDimensions="0" Override="" OverrideVariable="">17 RGBCam-Trans Blue</Variable>
</FunctionEntry>
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Blue"/>
<WhileLoopEntry Expression="(TuneDown=0) or (TuneTop=0)">
<CodeBlock>
<AssignVariableEntry VariableName="Camera.Digital.Exposure" Expression="Exposure_Tmp"/>
<FunctionEntry GUID="{0x281ef4a0-0x2b37-0x11d4-0x98-0x53-0x0-0xe0-0x18-0x90-0x87-0x5b}" FunctionName="Acquire" Interactive="0" ApplicationName="acquire" VersionNumber="20000127" CommandID="5" MissingImage="0" MetaJournal="000000000CD73F40" IsCurrentVersion="1" Variables="000000000CD73C68">
<Variable Type="Image" Name="jnlAcquire.imDest" NDimensions="0" Override="" OverrideVariable="">m	0 6 9 15 1 -1 -1 4 Tune </Variable>
</FunctionEntry>
<FunctionEntry GUID="{0x3cef1e51-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Show Region Statistics" Interactive="0" ApplicationName="mmproc" VersionNumber="20060816" CommandID="6" MissingImage="0" MetaJournal="000000000A02D150" IsCurrentVersion="1" Variables="000000000A02CE78">
<Variable Type="Image" Name="jnlLogRegion.im" NDimensions="0" Override="" OverrideVariable="">m	1 3 9 0 1 -1 -1 8 Untitled </Variable>
<Variable Type="Logical" Name="jnlLogRegion.bUseThreshold" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable>
<Variable Type="Logical" Name="jnlLogRegion.bEntireImage" NDimensions="0" Override="" OverrideVariable="">TRUE</Variable>
<Variable Type="Integer" Name="jnlLogRegion.channel" NDimensions="0" Override="" OverrideVariable="">2</Variable>
</FunctionEntry>
<AssignVariableEntry VariableName="Intensity_Tmp" Expression="ShowRegionStatistics.Average"/>
<IfThenElseEntry Expression="Intensity_Tmp&gt;Intensity_Green">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Next" Expression="floor(Exposure_Tmp/1.1)"/>
<IfThenElseEntry Expression="Exposure_Next=Exposure_Tmp">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Tmp-1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Next"/>
</CodeBlock>
</IfThenElseEntry>
<AssignVariableEntry VariableName="TuneTop" Expression="1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="TuneDown" Expression="1"/>
<AssignVariableEntry VariableName="Exposure_Next" Expression="floor(Exposure_Tmp*1.1)"/>
<IfThenElseEntry Expression="Exposure_Next=Exposure_Tmp">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Tmp+1"/>
</CodeBlock>
<CodeBlock Condition="false">
<AssignVariableEntry VariableName="Exposure_Tmp" Expression="Exposure_Next"/>
</CodeBlock>
</IfThenElseEntry>
</CodeBlock>
</IfThenElseEntry>
</CodeBlock>
</WhileLoopEntry>
<AssignVariableEntry VariableName="Exposure_Blue" Expression="Exposure_Tmp"/>
<FunctionEntry GUID="{0x3cef1e54-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Close" Interactive="0" ApplicationName="mmproc" VersionNumber="1" CommandID="7" MissingImage="0" MetaJournal="000000000A03BAD0" IsCurrentVersion="1" Variables="000000000A03B7F8">
<Variable Type="Image" Name="jnlCloseImage.im" NDimensions="0" Override="" OverrideVariable="">m	1 6 9 0 1 -1 -1 4 Tune </Variable>
<Variable Type="Logical" Name="jnlCloseImage.bSaveIt" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable>
</FunctionEntry>
<RunJournalEntry Disabled="0" JournalName="C:\Program Files\MM\app\mmproc\journals\Seb\RGBCam-Acquire.JNL"/>
<TraceEntry Expression="&quot;Red=&quot;+STR(Exposure_Red)+&quot;ms , &quot;+&quot;Green=&quot;+STR(Exposure_Green)+&quot;ms , &quot; +&quot;Blue=&quot;+STR(Exposure_Blue)+&quot;ms &quot; "/>
</CodeBlock>
</Journal>
