Journal
Description: New Journal
Version VersionNumber=2.4
PromptUser VariableName=LiveCol, PromptType=RadioButton, TitleText=Live RGBCam, Constrain=1, PromptText=Select the Channel, DialogXPos=1022, DialogYPos=489, ItemText=Red Green Blue White        , Min=2.23208e-317, Max=2.23208e-317
IfThenElse Expression=LiveCol="Red"
  CodeBlock Condition=true
    Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "RGBCam-Trans Red"
    IfThenElse Expression=VariableExists(Exposure_Red)
      CodeBlock Condition=true
        Camera.Digital.Exposure = Exposure_Red
IfThenElse Expression=LiveCol="Green"
  CodeBlock Condition=true
    Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "RGBCam-Trans Green"
    IfThenElse Expression=VariableExists(Exposure_Green)
      CodeBlock Condition=true
        Camera.Digital.Exposure = Exposure_Green
IfThenElse Expression=LiveCol="Blue"
  CodeBlock Condition=true
    Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "RGBCam-Trans Blue"
    IfThenElse Expression=VariableExists(Exposure_Blue)
      CodeBlock Condition=true
        Camera.Digital.Exposure = Exposure_Blue
IfThenElse Expression=LiveCol="White"
  CodeBlock Condition=true
    Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "TRANS Camera"
    IfThenElse Expression=VariableExists(Exposure_Blue)
      CodeBlock Condition=true
        Camera.Digital.Exposure = IF(Exposure_Blue<Exposure_Green,IF(Exposure_Blue<Exposure_Red,Exposure_Blue,Exposure_Red),IF(Exposure_Green<Exposure_Red,Exposure_Green,Exposure_Red))/2
Acquire - Start Live
