<Journal><Description>New Journal</Description><Version VersionNumber="2.4"/><CodeBlock><FunctionEntry GUID="{0x3cef1e1a-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Select Illumination" Interactive="0" ApplicationName="mmproc" VersionNumber="1" CommandID="1" MissingImage="0" MetaJournal="0000000009FB6358" IsCurrentVersion="1" Variables="0000000009FB6098"><Variable Type="Logical" Name="jnlSelectIllum.bUseLegacyDelay" NDimensions="0" Override="" OverrideVariable="">FALSE</Variable><Variable Type="Integer" Name="jnlSelectIllum.cMillisecDelay" NDimensions="0" Override="" OverrideVariable="">100</Variable><Variable Type="String" Name="jnlSelectIllum.stSetting" NDimensions="0" Override="" OverrideVariable="">16 RGBCam-Trans Red</Variable></FunctionEntry><IfThenElseEntry Expression="VariableExists(Exposure_Red)"><CodeBlock Condition="true"><AssignVariableEntry VariableName="Camera.Digital.Exposure" Expression="Exposure_Red"/></CodeBlock><CodeBlock Condition="false"/></IfThenElseEntry><FunctionEntry GUID="{0x7e1a65f0-0x31b5-0x11d4-0x99-0xfa-0x0-0x10-0x4b-0x98-0xde-0xde}" FunctionName="Acquire - Start Live" Interactive="0" ApplicationName="acquire" VersionNumber="1" CommandID="2" MetaJournal="000000000CD74D38" IsCurrentVersion="1" Variables="000000000CD74A68" MissingImage="0"></FunctionEntry></CodeBlock></Journal>
