Journal

Version VersionNumber=2.4
MDA - Load State
  stFileName = "C:\Program Files\MM\app\mmproc\journals\tools bar_PRISM\SebColCamDICMDA2.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = TRUE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = TRUE
  bJournals = TRUE
PromptUser VariableName=pipo, PromptType=TextList, TitleText=To Run MDA, Constrain=1, PromptText=Open the windows (no need to select, just an info):, DialogXPos=1022, DialogYPos=489, ItemText=Window>History window...  Apps> Multi Dimensional Acquisitions...   Copy Exposures to channels W1,W2 and W3  , Min=2.23208e-317, Max=2.23208e-317
