Journal
Description: New Journal
Version VersionNumber=2.4
Select Image
  im = "RGBCam-Trans Green"
  prompt = ""
Scale Image Interactive
  imSource = m 1 3 10 0 1 -1 -1 8 Untitled
  range = 5
  autoScale = FALSE
  low = 400
  high = 40000
  autolo = 0.05
  autohi = 0.05
  bRedAutoScale = TRUE
  wRedLowScale = 391
  wRedHighScale = 32457
  dpRedLowPercent = 0
  dpRedHighPercent = 0
  bGreenAutoScale = TRUE
  wGreenLowScale = 391
  wGreenHighScale = 32457
  dpGreenLowPercent = 0
  dpGreenHighPercent = 0
  bBlueAutoScale = TRUE
  wBlueLowScale = 391
  wBlueHighScale = 32457
  dpBlueLowPercent = 0
  dpBlueHighPercent = 0
  bScaleROI = FALSE
Image.ScaleAutoScale = 0
MinScale = Image.ScaleValueLow
MaxScale = Image.ScaleValueHigh
Select Image
  im = "RGBCam-Trans Red"
  prompt = ""
Image.ScaleValueLow = MinScale
Image.ScaleValueHigh = MaxScale
Image.ScaleAutoScale = 0
Select Image
  im = "RGBCam-Trans Blue"
  prompt = ""
Image.ScaleAutoScale = 0
Image.ScaleValueLow = MinScale
Image.ScaleValueHigh = MaxScale
Color Combine
  imRed = "RGBCam-Trans Red"
  imGreen = "RGBCam-Trans Green"
  imBlue = "RGBCam-Trans Blue"
  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Color Combine"
  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
  bColorEncode = FALSE
  nSource = 1
  nResultDepth = 2
  bHueRendering = FALSE
PromptUser VariableName=CloseWindows, PromptType=YesNo, TitleText=Close individual RGB channels ?, Constrain=1, PromptText=Close individual RGB channels ?, DialogXPos=0, DialogYPos=0, Min=1.87275e-317, Max=1.87275e-317
IfThenElse Expression=CloseWindows="Y"
  CodeBlock Condition=true
    Close
      im = "RGBCam-Trans Blue"
      bSaveIt = FALSE
    Close
      im = "RGBCam-Trans Green"
      bSaveIt = FALSE
    Close
      im = "RGBCam-Trans Red"
      bSaveIt = FALSE
